{
  "actions": {
    "acqdatetime": {
      "filters": {},
      "params": {}
    },
    "resonance_frequency": {
      "filters": {},
      "params": {}
    },
    "rf_transmitter_amplitude": {
      "filters": {},
      "params": {
        "rf_transmitter_amplitude_dicom_tag": ""
      }
    },
    "signal_noise_ratio": {
      "filters": {},
      "params": {
        "phase_encoding": "COL",
        "background_roi_width": "",
        "background_roi_height": "",
        "background_roi_shift_x": "",
        "background_roi_shift_y": "",
        "phantom_roi_radius_cm": "15"
      }
    },
    "ghosting": {
      "filters": {},
      "params": {}
    },
    "image_uniformity": {
      "filters": {},
      "params": {}
    },
    "geometry": {
      "filters": {},
      "params": {}
    },
    "shim": {
      "filters": {},
      "params": {}
    }
  },
  "cfgformat": "20180910",
  "comments": {
    "author": "Guido Millenaar, NKI-AvL",
    "description": "WAD2.0 MR config for AVL Philips 3.0T (MR16)",
    "params": {
      "rf_transmitter_amplitude_dicom_tag": "The private DICOM tag where the RF transmitter amplitude is stored"
    }
  }
}