{
  "actions": {
    "acqdatetime": {
      "filters": {},
      "params": {
        "datetime_level": "Acquisition",
        "datetime_series_description": "ACR SNR 8CH"
      }
    },
    "resonance_frequency": {
      "filters": {},
      "params": {
        "resonance_frequency_series_description": "ACR TRA T1 DIS2D"
      }
    },
    "signal_noise_ratio": {
      "filters": {},
      "params": {
        "snr_series_description": "ACR SNR 8CH",
        "snr_background_roi_shift_mm": 112,
        "snr_signal_roi_diameter_mm": 150,
        "snr_noise_roi_sides_mm": 10,
	"snr_noise_image_number": 6
      }
    },
    "ghosting": {
      "filters": {},
      "params": {
        "ghosting_series_description": "ACR SNR 8CH",
        "ghosting_roi_long_side_mm": 28,
        "ghosting_roi_short_side_mm": 7,
        "ghosting_noise_roi_sides_mm": 10,
        "ghosting_phantom_roi_radius_mm": 150,
        "ghosting_background_roi_shift_mm": 112,
	"ghosting_image_number": 6
      }
    },
    "image_uniformity": {
      "filters": {},
      "params": {
        "image_uniformity_series_description": "ACR SNR 8CH",
        "image_uniformity_image_number": 1,
        "image_uniformity_phantom_roi_size_mm": 150,
        "image_uniformity_uniformity_roi_size_mm": 15,
	"image_uniformity_image_number": 6
      }
    },
    "geometry": {
      "filters": {},
      "params": {
        "geometry_x_y_series_description": "ACR TRA T1 DIS2D",
        "geometry_x_y_image_number": 6,
        "geometry_z_series_description": "ACR SAG DIS2D"
      }
    },
    "shim": {
      "filters": {},
      "params": {
        "shim_series_description": "ACR B0 MAP",
        "shim_B0_map_type": "Philips Double Echo FFE",
        "shim_relative_roi_size": 95,
        "shim_top_margin": 20
      }
    },
    "rf_transmitter_amplitude": {
      "filters": {},
      "params": {
        "rf_transmitter_amplitude_tag": ["0x0008", "0x000A"],
        "rf_transmitter_series_description": "ACR TRA T1 DIS2D"
      }
    }
  },
  "cfgformat": "20180910",
  "comments": {
    "author": "Guido Millenaar, NKI-AvL",
    "description": "WADQC 2 module for use with ACR MR phantom acquisitions",
    "version": "0.9",
    "params": {
      "datetime_level": "REQUIRED. For allowed options see wad_qc.modulelibs.wadwrapper_lib.dcm_datetime.get_datetime.",
      "datetime_series_description": "REQUIRED. Series description for retreiving datetime",

      "resonance_frequency_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining the resonance frequency.",

      "snr_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining the signal to noise ratio.",
      "snr_signal_roi_diameter_mm": "Diameter in millimeters for the centered roi that is used for measuring signal.",
      "snr_noise_roi_sides_mm": "Side length in millimeters of the square rois that are used for measuring noise.",

      "ghosting_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining ghosting.",
      "ghosting_roi_width_mm": "Width in millimeters of the roi used for measuring ghosting signal.",
      "ghosting_roi_height_mm": "Height in millimeters of the roi used for measuring ghosting signal.",

      "image_uniformity_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining image uniformity.",

      "geometry_x_y_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining phantom geometry over x and y axes.",
      "geometry_z_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining phantom geometry over z axis.",

      "shim_series_description": "REQUIRED. The series description that identifies the correct acquisition for determining shim.",
      "shim_B0_map_type": "REQUIRED. Type of map supplied by the scanner. Options: 'Philips Double Echo FFE'",
      "shim_relative_roi_size": "REQUIRED. Size of the ROI radius used for measuring the B0 values. Percentage of the phantom size.",
      "shim_top_margin": "REQUIRED. Percentage of the ROI diameter which is vertically removed from the top to account for the air bubble in the phantom.",

       "rf_transmitter_amplitude_tag": "REQUIRED. Specify the header tag that holds the transmitter amplitude. List of two hexadecimal strings of length 6, e.g ['0x0008', '0x014A']",
       "rf_transmitter_series_description": "REQUIRED. Series description to use when looking up the transmitter amplitude"
    }
  }
}